PsychoPy2experiment version="1.83.04"
Settings
  Data filename = 'data' + os.path.sep + '_'.join([expName, expInfo['sessionID'], 'run1', expInfo['date']])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'sessionID': u'', u'mriMode': u'Off', u'counterbalance': u'CB1'}
  Save wide csv file = False
  expName = EMOTION
  Units = deg
  Use version = latest
  Screen = 1
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Routines
  Routine getready
    CodeComponent repsCode
      Begin Experiment:
        events = [] # run, condition, onset, duration, value

        nReps = expInfo['nRuns']
    TextComponent ready
      text = Get Ready!
      startVal [time (s)] = 0.0
      font = Verdana
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = '7'
      startVal [time (s)] = 0.0
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  Routine feedback
    TextComponent feedbackText
      wrapWidth = 30
      stopVal [duration (s)] = 2
      text [set every frame] = $msg
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    CodeComponent feedbackMovieCode
      Each Frame:
        if frameN == 0:
            winRecorder.keyframe()
  Routine endPrac
    TextComponent endPracText
      wrapWidth = 30
      text = You finished the practice!
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    KeyboardComponent endPracResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine rest
    TextComponent free
      text = Feel free to rest.
      startVal [time (s)] = 0.0
      font = Verdana
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine intro
    CodeComponent constantsCode
      Begin Experiment:
        import yaml
        import itertools

        if os.path.exists('siteConfig.yaml'):
            with open('siteConfig.yaml') as f:
                config = yaml.safe_load(f)
        else:
            copyMsg = ('Please copy configuration text file '
                       '"siteConfig.yaml.example" to "siteConfig.yaml" '
                       'and edit it with your trigger and buttons.')
            raise IOError(copyMsg)

        logging.exp('Using Site Configuration: %s' % config)
        allowed_keys = list(itertools.chain.from_iterable(
            config['keys'].values()))

        nRuns = 1

        counterbalance = expInfo['counterbalance']
        if counterbalance not in ['CB1', 'CB2', 'CB3', 'practice']:
            raise ValueError('counterbalance must be one of "CB1", "CB2", "CB3", or "practice" (capitalization counts), but it was %s' % counterbalance)
        elif expInfo['counterbalance'] == 'practice':
            nBlocks= 2
            session = 0
            mode = 'practice'
            condFile = 'conditions/practice.csv'
        else:
            nBlocks= 6
            session = 1
            mode = 'scan'
            condFile = 'conditions/trials%s.csv' % counterbalance

        titleLetterSize = config['style']['titleLetterSize']  # 3
        textLetterSize = config['style']['textLetterSize']  # 1.5
        fixLetterSize = config['style']['fixLetterSize']  # 2.5
        subtitleLetterSize = config['style']['subtitleLetterSize']  # .7
        wrapWidth = config['style']['wrapWidth']  # 30

        imageSize = [4, 4]
        trialTopPos = [0, 4]
        trialLeftPos = [-4, -1.25]
        trialRightPos = [4, -1.25]
    TextComponent introText
      wrapWidth = wrapWidth
      pos = [0, 2]
      text = MATCHING
      startVal [time (s)] = 0.0
      letterHeight = titleLetterSize
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    KeyboardComponent introResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent raWindowCode
      Begin Experiment:
        # Setup the RA Experimenter Window
        raWin = visual.Window(size=[1280,800], fullscr=False, allowGUI=True, allowStencil=False,
            monitor=u'testMonitor', color=u'black', colorSpace='rgb',
            blendMode='avg', useFBO=True,
            units='deg',
            screen=1)

        raText= visual.TextStim(win=raWin, ori=0, name='raText',
            text='',    font='Arial',
            pos=[0, -4], height=textLetterSize * 1.5, wrapWidth=30,
            color='white', colorSpace='rgb', opacity=1,
            depth=0.0)

        raVerbalText = visual.TextStim(win=raWin, ori=0, name='raVerbalText',
            text='', font='Arial',
            pos=[0,3], height=textLetterSize * 1.5, wrapWidth=30,
            color='#3EB4F0', colorSpace='rgb', opacity=1,
            depth=0.0, italic=True)
      Begin Routine:
        if mode == 'practice':
            raVerbalText.text = '"Welcome to the Matching Game!"'
            raText.text = 'Press <space> to continue.'
        else:
            raVerbalText.text = '"Welcome back to the Matching Game!"'
            raText.text = 'Press <space> to continue.'

        raVerbalText.draw()
        raText.draw()
        raWinRecorder.keyframe()
        raWin.flip()
    CodeComponent outerFrameCode
      Begin Experiment:
        outerFrame = visual.Rect(win=win, lineWidth=1, lineColor='white',
                                 width=16.4, height=12.4, units='deg')

        pointerXoffset = 4
        pointerYoffset = -4.5

        pointerLabelPrompt = visual.TextStim(win=win, height=subtitleLetterSize,
                                     text='', pos=(-pointerXoffset, pointerYoffset), name='pointerLabelPrompt')
        pointerFingerPrompt = visual.TextStim(win=win, height=subtitleLetterSize,
                                     text='POINTER FINGER', pos=(-pointerXoffset, pointerYoffset-1),  name='pointerFingerPrompt')
        middleLabelPrompt = visual.TextStim(win=win, height=subtitleLetterSize,
                                     text='', pos=(pointerXoffset, pointerYoffset),  name='middleLabelPrompt')
        middleFingerPrompt = visual.TextStim(win=win, height=subtitleLetterSize,
                                     text='MIDDLE FINGER', pos=(pointerXoffset, pointerYoffset-1),  name='middleFingerPrompt')

        pointerLabelPrompt.text = 'Bottom left'
        middleLabelPrompt.text = 'Bottom right'

        buttonPrompts = [pointerLabelPrompt, pointerFingerPrompt,
                         middleLabelPrompt, middleFingerPrompt]

        # outerFrame.autoDraw = True
    TextComponent introText2
      pos = [0, -2]
      text = GAME
      startVal [time (s)] = 0.0
      letterHeight = titleLetterSize
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    CodeComponent versionCode
      Begin Experiment:
        # Record Git Status in Subject Logs
        from subprocess import check_output, check_call, CalledProcessError
        try:
            revision = check_output(['git','rev-parse', '--short', 'HEAD'])
            revision = revision.strip()
            gitInstalled = True
        except:
            if os.path.exists('VERSION'):
                with open('VERSION', 'r') as f:
                    revision = f.read().strip()
            else:
                revision = ''
            gitInstalled = False

        if gitInstalled:
            try:
                check_call(['git', 'diff-files', '--quiet'])
            except CalledProcessError:
                revision = 'Task changes detected. Nearest head: %s' % revision
                status_msg = check_output(['git', 'status'])
                msg ="""%s

        Warning: the experiment has unexpected changes.
        """ % status_msg
                logging.critical(msg)
                # core.quit()

        expInfo['git-revision'] = revision
        logging.exp('git-revision: %s' % revision)
    CodeComponent movieCode
      Begin Experiment:
        import hcpcommon
        movieClock = core.Clock()

        record_example, cleanup = False, True

        winRecorder = hcpcommon.WinRecorder(win=win,
                                            clock=movieClock,
                                            record=record_example,
                                            cleanup=cleanup)

        raWinRecorder = hcpcommon.WinRecorder(win=raWin,
                                              clock=movieClock,
                                              record=record_example,
                                              cleanup=cleanup)

        def save_movie(filename, recorder1, recorder2):
            win_fname = filename + '_win-movie.png'
            rawin_fname = filename + '_rawin-movie.png'

            # Save stills and convert to .mov
            recorder1.save(win_fname)
            recorder2.save(rawin_fname)
            movie_outfile = filename + '_EXAMPLE.mov'
            hcpcommon.WinRecorder.save_sidebyside([recorder1, recorder2],
                                                  movie_outfile)
            print('Saved %s' % movie_outfile)
            return movie_outfile
      Each Frame:
        if frameN == 0:
            winRecorder.keyframe()
      Begin Routine:
        movieClock.reset()
      End Experiment:
        save_movie(filename, winRecorder, raWinRecorder)
  Routine waitingScanner
    TextComponent waitScannerText
      text = Get ready!
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    CodeComponent waitScannerCode
      Begin Experiment:
        import datetime
        fmriClock = core.Clock()
        trigger = 'usb'
        #trigger = 'parallel'
        if trigger == 'parallel':
            from psychopy.contrib import parallel as winioport
            #from psychopy import parallel
        elif trigger == 'usb':
            from psychopy.hardware.emulator import launchScan
            #
            # settings for launchScan:
            MR_settings = {
                'TR': 2.000, # duration (sec) per volume
                'volumes': 210, # number of whole-brain 3D volumes / frames
                'sync': config['trigger'], # character to use as the sync timing event; assumed to come at start of a volume
                'skip': 0, # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
                }
      Each Frame:
        if expInfo['mriMode'] != 'Off':
            winRecorder.keyframe()
            if trigger == 'usb':
                vol = launchScan(win, MR_settings,
                      globalClock=fmriClock,
                      mode=expInfo['mriMode'],
                      wait_msg = '')

            elif trigger == 'parallel':
                address = 0x378
                #parallel.setPortAddress(0x378)
                wait_msg = "Get ready!"
                pinStatus = winioport.inp(address)
                waitMsgStim = visual.TextStim(win, color='white', text=wait_msg)
                waitMsgStim.draw()
                win.flip()
                while True:
                    if pinStatus != winioport.inp(address):
                       break
                       # start exp when pin values change
                fmriClock.reset()
                logging.exp('parallel trigger: start of scan')
                win.flip()  # blank the screen on first sync pulse received
        else:
            fmriClock.reset()

        triggerWallTime = datetime.datetime.today()
        expInfo['triggerWallTime'] = triggerWallTime.strftime('%a %b %d %H:%M:%S %Y')
        expInfo['triggerGlobalTime'] = globalClock.getTime()
        continueRoutine = False

        filename = _thisDir + os.sep + u'data/' + '_'.join([expName, expInfo['sessionID'], 'run%s'%runNum, triggerWallTime.strftime('%Y-%m-%d_%H%M%S')])
        continueRoutine = False
    CodeComponent setRunNumCode
      Begin Routine:
        runNum = session + runs.thisN
    CodeComponent setEventsList
      Each Frame:
        if frameN == 0:
            winRecorder.keyframe()
      Begin Routine:
        events = []

        raText.pos=[0, 0]

        raVerbalText.text = ''
        raText.text = 'Start the scan.'

        raVerbalText.draw()
        raText.draw()
        raWinRecorder.keyframe()
        raWin.flip()
      End Routine:
        raVerbalText.text = ''
        raText.text = ''
        raText.pos = [0, 0]
        raText.draw()
        raVerbalText.draw()
        raWinRecorder.keyframe()
        raWin.flip()
  Routine pracInstr2
    ImageComponent top
      pos = trialTopPos
      startVal [time (s)] = 0.0
      image = images/FA-mock_top.jpg
      size = imageSize
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    ImageComponent left
      pos = trialLeftPos
      startVal [time (s)] = 0.0
      image = images/FA-mock_left.jpg
      size = imageSize
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    ImageComponent right
      pos = trialRightPos
      startVal [time (s)] = 0.0
      image = images/FA-mock_right.jpg
      size = imageSize
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    ImageComponent pointerFinger
      pos = [0,-2.5]
      startVal [time (s)] = 0.0
      image = images/pointerFingerButton.png
      size = [367./454 * 4, 4]
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    KeyboardComponent pracInstr2Resp
      forceEndRoutine = True
      allowedKeys = '1','num_1'
      startVal [time (s)] = 0.0
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    CodeComponent raWindow2Code
      Each Frame:
        if frameN == 0:
            winRecorder.keyframe()
      Begin Routine:
        raVerbalText.text = '"If the bottom left picture matches the top picture, like in this example, you should push the button under your POINTER finger. Go ahead and press the pointer finger button now."'
        raText.text = '\n\nWait for the participant to press the pointer finger button to continue.'

        raVerbalText.draw()
        raText.draw()
        raWinRecorder.keyframe()
        raWin.flip()
  Routine end
    CodeComponent endCode
      Begin Experiment:
        import pandas as pd
      Begin Routine:
        if mode == 'practice':
            msg='You finished this practice!'
        else:
            msg='You finished this game!'
      End Experiment:
        events_df = pd.DataFrame(events)

        design_outfile = os.path.join('data', filename + '_design.csv')
        events_df.to_csv(design_outfile, index=False)
    TextComponent endText
      wrapWidth = 30
      text = You finished this game!
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    KeyboardComponent endResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent raWinEndCode
      Each Frame:
        if frameN == 0:
            winRecorder.keyframe()
      Begin Routine:
        raText.text='Press <space> to exit.'
        raText.draw()
        raWinRecorder.keyframe()
        raWin.flip()
  Routine countdown
    CodeComponent countdownCode
      Each Frame:
        # Countdown Timing
        if frameN == 0:
            countdownTime = fmriClock.getTime()
            currentLoop.addData('countdownStartTime', countdownTime)
      Begin Routine:
        countdownMsg = currentLoop.nRemaining + 1
        currentLoop.addData('countdownLabel', countdownMsg)

        totalButtonTrack = []
        countConsecutive=1

        correct_resp = 0
        noResp = 0
        incorrect_resp = 0

        corrRespPerc = 0
        incorrRespPerc = 0
        noRespPerc = 0

        fiveBackCorrCount = 0
        fiveBacknoRespCount = 0
        fiveBackIncorrCount = 0

        totalCountList=[]
      End Routine:
        currentLoop.addData('countdownStartTime', countdownTime)
        currentLoop.addData('countdownLabel', countdownMsg)
        currentLoop.addData('trialNum', 0)
    TextComponent countdownText
      stopVal [duration (s)] = 2
      text [set every repeat] = $countdownMsg
      startVal [time (s)] = 0.0
      letterHeight = titleLetterSize
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    CodeComponent countdownMovieCode
      Each Frame:
        if frameN == 1:
            winRecorder.keyframe()
  Routine pracInstr3
    ImageComponent top3
      pos = trialTopPos
      startVal [time (s)] = 0.0
      image = images/oval-vertical.bmp
      size = imageSize
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    ImageComponent left3
      pos = trialLeftPos
      startVal [time (s)] = 0.0
      image = images/circle.bmp
      size = imageSize
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    ImageComponent right3
      pos = trialRightPos
      startVal [time (s)] = 0.0
      image = images/oval-vertical.bmp
      size = imageSize
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    ImageComponent middleFinger
      pos = [0,-2.5]
      startVal [time (s)] = 0.0
      image = images/middleFingerButton.png
      size = [407./456 * 4, 4]
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    KeyboardComponent pracInstr3Resp
      forceEndRoutine = True
      allowedKeys = '2', 'num_2'
      startVal [time (s)] = 0.0
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    CodeComponent raWindow3Code
      Each Frame:
        if frameN == 0:
            winRecorder.keyframe()
      Begin Routine:
        raVerbalText.text = '"And if the bottom right picture matches the top picture, like in this other example, you should push the button under your MIDDLE finger. Press the middle finger button now."'
        raText.text = '\n\nWait for the participant to press the middle finger button to continue.'

        raVerbalText.draw()
        raText.draw()
        raWinRecorder.keyframe()
        raWin.flip()
  Routine cue
    CodeComponent cueCode
      Begin Experiment:
        msg=''
      Each Frame:
        if frameN == 0:
            cueStartTime = fmriClock.getTime()
      Begin Routine:
        # Start the clock
        timer = core.Clock()

        if blocks.thisN in (0,2,4):
            msg= 'Shapes'

        elif blocks.thisN in (1,3,5):
            msg= 'Faces'

        rows = range(currentLoop.thisN * 6, currentLoop.thisN * 6 + 6)
      End Routine:
        cueEndTime = fmriClock.getTime()

        events.append(dict(
            run=runNum,
            condition='cue',
            duration=3,
            onset=cueStartTime))

        currentLoop.addData('cueStartTime', cueStartTime)
        currentLoop.addData('cueEndTime', cueEndTime)
    TextComponent matchText
      stopVal [duration (s)] = 3
      pos = [0, 2]
      text = Match
      startVal [time (s)] = 0.0
      letterHeight = titleLetterSize
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    TextComponent cueText
      wrapWidth = 30
      stopVal [duration (s)] = 3
      pos = [0, -2]
      text [set every repeat] = $msg
      startVal [time (s)] = 0.0
      letterHeight = titleLetterSize
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    CodeComponent cueMovieCode
      Each Frame:
        if frameN == 0:
            winRecorder.keyframe()
  Routine pracInstr1
    ImageComponent top_image
      pos = trialTopPos
      startVal [time (s)] = 0.0
      image = images/FA-mock_top.jpg
      size = imageSize
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    ImageComponent left_image
      pos = trialLeftPos
      startVal [time (s)] = 0.0
      image = images/FA-mock_left.jpg
      size = imageSize
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    ImageComponent right_image
      pos = trialRightPos
      startVal [time (s)] = 0.0
      image = images/FA-mock_right.jpg
      size = imageSize
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    KeyboardComponent pracInstr1Resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent raWindow1Code
      Begin Routine:
        raVerbalText.text = '"In this game, you will see groups of three faces or three shapes, arranged in a triangle, as shown here."'
        raText.text = 'Press <space> to continue.'

        raText.draw()
        raVerbalText.draw()
        raWin.flip()
    CodeComponent drawPromptsPrac1Code
      Begin Routine:
        for prompt in buttonPrompts:
            prompt.autoDraw = True
  Routine pracInstr6
    TextComponent pracInstr6Text
      wrapWidth = 30
      text = Do you have any questions?
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    KeyboardComponent pracInstr6Resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent raWin6Code
      Each Frame:
        if frameN == 0:
            winRecorder.keyframe()
      Begin Routine:
        raText.pos= [0,-3]

        raVerbalText.text = '"Do you have any questions?\n\nNow you will complete a short practice that will look exactly like the game you will play in the scanner.\n\nIn this practice, we will not tell you if you are right or wrong. Just try your best to follow the instructions and play the game."'
        raText.text = '\n\n\n\n\nPress <space> to continue.'

        raVerbalText.draw()
        raText.draw()
        raWinRecorder.keyframe()
        raWin.flip()
  Routine pracInstr7
    TextComponent pracInstr7Text
      wrapWidth = 30
      text = Are you ready to begin the practice?
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    KeyboardComponent pracInstr7Resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent raWin7Code
      Each Frame:
        if frameN == 0:
            winRecorder.keyframe()
      Begin Routine:
        raVerbalText.text = '"Are you ready to begin the practice?"'
        raText.text = 'Press <space> to continue.\n\nWatch the participant\'s performance and give feedback as appropriate. Make sure the participant understands the task.'

        raVerbalText.draw()
        raText.draw()
        raWinRecorder.keyframe()
        raWin.flip()
      End Routine:
        raText.text = ''
        raText.draw()
        raWin.flip()
  Routine pracInstr4
    ImageComponent exTopImage
      pos = trialTopPos
      startVal [time (s)] = 0.0
      image [set every frame] = images/FA-mock_top.jpg
      size = imageSize
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    ImageComponent exLeftImage
      pos = trialLeftPos
      startVal [time (s)] = 0.0
      image [set every frame] = images/FA-mock_left.jpg
      size = imageSize
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    ImageComponent exRightImage
      pos = trialRightPos
      startVal [time (s)] = 0.0
      image [set every frame] = images/FA-mock_right.jpg
      size = imageSize
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    KeyboardComponent exTrialResp
      correctAns = $corrAns
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
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    CodeComponent exRaWinCode
      Each Frame:
        for prompt in buttonPrompts:
            prompt.draw()

        if frameN == 0:
            winRecorder.keyframe()
      Begin Routine:
        raVerbalText.text = '"While you play this game, we will remind you what buttons to press at the bottom of the screen, as you can see here."'
        raText.text = 'Press <space> to continue.'

        raVerbalText.draw()
        raText.draw()
        raWinRecorder.keyframe()
        raWin.flip()
  Routine pracInstr5
    TextComponent pracInstr5Text
      wrapWidth = 30
      text = Let's practice. 
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    KeyboardComponent pracInstr5Resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent pracInstr5Code
      Begin Routine:
        raVerbalText.text = '"Let\'s practice a few trials together."'
        raText.text = 'Press <space> to continue.'

        raVerbalText.draw()
        raText.draw()
        raWin.flip()

        totalButtonTrack = []
        countConsecutive=1

        correct_resp = 0
        noResp = 0
        incorrect_resp = 0

        corrRespPerc = 0
        incorrRespPerc = 0
        noRespPerc = 0

        fiveBackCorrCount = 0
        fiveBacknoRespCount = 0
        fiveBackIncorrCount = 0

        totalCountList=[]
      End Routine:
        for prompt in buttonPrompts:
            prompt.autoDraw = False

        if frameN == 0:
            winRecorder.keyframe()
  Routine scanInstr1
    CodeComponent slideLayoutCode
      Begin Experiment:
        ##########################################
        # Layout variables for Instruction Slide #
        ##########################################
        y1 = 4
        y2 = 0
        x1 = -4
        x1left = x1 - 2.25
        x1right = x1 + 2.25
        x2 = 4
        x2left = x2 - 2.25
        x2right = x2 + 2.25
        stimSize = [3.75, 3.75]
    ImageComponent faceTop
      pos = (x2, y1)
      startVal [time (s)] = 0.0
      image = images/FF-mock_top.jpg
      size = stimSize
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    ImageComponent faceLeft
      pos = (x2left, y2)
      startVal [time (s)] = 0.0
      image = images/FF-mock_left.jpg
      size = stimSize
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    ImageComponent faceRight
      pos = (x2right, y2)
      startVal [time (s)] = 0.0
      image = images/FF-mock_right.jpg
      size = stimSize
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    ImageComponent shapeTop
      pos = (x1, y1)
      startVal [time (s)] = 0.0
      image = images/oval-horizontal.bmp
      size = stimSize
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    ImageComponent shapeLeft
      pos = (x1left, y2)
      startVal [time (s)] = 0.0
      image = images/oval-horizontal.bmp
      size = stimSize
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    ImageComponent shapeRight
      pos = (x1right, y2)
      startVal [time (s)] = 0.0
      image = images/circle.bmp
      size = stimSize
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    CodeComponent drawPromptsCode
      Each Frame:
        for prompt in buttonPrompts:
            prompt.draw()
    CodeComponent raWinRecapCode
      Each Frame:
        if record_exp_win:
            winRecorder.keyframe()
            record_exp_win = False

        if event.getKeys(keyList = ['space']):
            npresses += 1
            record_exp_win = True
            if npresses == 1:
                raVerbalText.text = '"Do you have any questions? Are you ready to play the game and be super still in this scan?"'
                raText.text = 'Press <space> to continue.'
                raVerbalText.draw()
                raText.draw()
                raWinRecorder.keyframe()
                raWin.flip()
            else:
                continueRoutine = False
      Begin Routine:
        raText.pos=[0, -6]
        raVerbalText.text = '"Remember, in this game, your job is to indicate which face or shape on the bottom row matches the face or shape on the top row. \n\nIf the left picture matches the top picture, press the button under your POINTER finger. If the right picture matches the top picture, press the button under your MIDDLE finger."'
        raText.text = 'Press <space> to continue.'

        raVerbalText.draw()
        raText.draw()
        raWinRecorder.keyframe()
        raWin.flip()

        npresses = 0
        record_exp_win = True
      End Routine:
        raText.text =''
        raText.draw()
        raWinRecorder.keyframe()
        raWin.flip()
  Routine fixation
    TextComponent cross
      stopVal [duration (s)] = 1.0
      text = +
      startVal [time (s)] = 0.0
      letterHeight = fixLetterSize
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    CodeComponent fixationCode
      Each Frame:
        if frameN == 0:
            fixStartTime = fmriClock.getTime()
            winRecorder.keyframe()
      End Routine:
        fixEndTime = fmriClock.getTime()

        currentLoop.addData('fixStartTime', fixStartTime)
        currentLoop.addData('fixEndTime', fixEndTime)

        entries = thisExp.entries

        if currentLoop.name != 'exampleTrials':
            updateRunLog(entries)
  Routine trial_old
    ImageComponent Top
      stopVal [time (s)] = 2
      pos = (0,8)
      startVal [time (s)] = 0.0
      image [set every repeat] = $os.path.join('images', stimTop)
      size = (8,8)
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    ImageComponent Left
      stopVal [time (s)] = 2
      pos = (-9,-1)
      startVal [time (s)] = 0.0
      image [set every repeat] = $os.path.join('images', stimLeft)
      size = (8,8)
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    ImageComponent Right
      stopVal [time (s)] = 2
      pos = (9, -1)
      startVal [time (s)] = 0.0
      image [set every repeat] = $os.path.join('images', stimRight)
      size = (8,8)
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    ImageComponent pointerFinger2
      stopVal [duration (s)] = 2
      pos = (-9,-9)
      startVal [time (s)] = 0.0
      image = images/pointerFinger.png
      size = [5,6]
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    ImageComponent middleFinger2
      stopVal [duration (s)] = 2
      pos = (9,-9)
      startVal [time (s)] = 0.0
      image = images/middleFinger.png
      size = [5,6]
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    KeyboardComponent trialResp2
      correctAns = $corrAns
      storeCorrect = True
      stopVal [time (s)] = 2
      forceEndRoutine = False
      allowedKeys = '1','2','num_1','num_2'
      startVal [time (s)] = 0.0
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    CodeComponent trialRespCode
      End Routine:
        resp=None
        if trialResp.keys:
            if trialResp.keys[-1] in config['keys']['left']:
                resp = 'left'
            elif trialResp.keys[-1] in config['keys']['right']:
                resp = 'right'
            elif not trialResp.keys:
                resp = None

        if (str(corrAns)==str('left') and resp == str('left')) or (str(corrAns)==str('right') and resp == 'right'):
            msg="Correct"
            correct_response = 1
        elif pracResp.keys==None:
            msg="Miss"
            correct_response = 0
        elif (str(corrAns)==str('left') and resp != str('left')) or (str(corrAns)==str('right') and resp != 'right'):
            msg="Incorrect"
            correct_response = 0

        currentLoop.addData('resp', resp)
        currentLoop.addData('msg', msg)
        currentLoop.addData('correctResponse', correct_response)
  Routine lastFixation
    TextComponent lastFixationText
      stopVal [duration (s)] = 8.4
      text = +
      startVal [time (s)] = 0.0
      letterHeight = fixLetterSize
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    CodeComponent lastFixationCode
      Each Frame:
        if frameN == 0:
            winRecorder.keyframe()
      End Routine:
        runEndTime = fmriClock.getTime()
        trials.addData('runEndTime', runEndTime)
        blocks.addData('runEndTime', runEndTime)

        events.append(dict(
            run=runNum,
            condition='runEnd',
            duration=0,
            onset=runEndTime))

        entries = thisExp.entries
        entries[-1]['runEndTime'] = runEndTime
        updateRunLog(entries)
  Routine exampleTrial
    ImageComponent topImageExample
      stopVal [duration (s)] = 2
      pos = trialTopPos
      startVal [time (s)] = 0.0
      image [set every repeat] = $os.path.join('images', stimTop)
      size = imageSize
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    ImageComponent leftImageExample
      stopVal [duration (s)] = 2
      pos = trialLeftPos
      startVal [time (s)] = 0.0
      image [set every repeat] = $os.path.join('images', stimLeft)
      size = imageSize
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    ImageComponent rightImageExample
      stopVal [duration (s)] = 2
      pos = trialRightPos
      startVal [time (s)] = 0.0
      image [set every repeat] = $os.path.join('images', stimRight)
      size = imageSize
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    TextComponent botLeftTextExample
      stopVal [duration (s)] = 2
      pos = [-9,-9]
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    TextComponent botRightTextExample
      stopVal [duration (s)] = 2
      pos = [9,-9]
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    TextComponent pointerTextExample
      stopVal [duration (s)] = 2
      pos = [-9,-10.5]
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    TextComponent middleTextExample
      stopVal [duration (s)] = 2
      pos = [9,-10.5]
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    KeyboardComponent exampleTrialResp
      correctAns = $corrAns
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = allowed_keys
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent respExampleLogCode
      Each Frame:
        for prompt in buttonPrompts:
            prompt.draw()
      Begin Routine:
        number_trials = exampleTrials.thisN + 1
      End Routine:
        resp=None
        respLast=None

        if exampleTrialResp.keys: #coding first response made by participant
            if exampleTrialResp.keys[0] in config['keys']['left']:
                resp = 'left'
            elif exampleTrialResp.keys[0] in config['keys']['right']:
                resp = 'right'
            elif not exampleTrialResp.keys:
                resp = None

        if exampleTrialResp.keys: #coding last response made by participant
            if exampleTrialResp.keys[-1] in config['keys']['left']:
                respLast = 'left'
            elif exampleTrialResp.keys[-1] in config['keys']['right']:
                respLast = 'right'

        if resp==str('left'):
            totalButtonTrack.append(1)
        elif resp==str('right'):
            totalButtonTrack.append(2)
        else: #no response
            totalButtonTrack.append(0)


        if (str(corrAns)==str('left') and resp == str('left')) or (str(corrAns)==str('right') and resp == 'right'):
            msg="CORRECT!"
            corrRespMsg="correct"
            corrRespCode = 1
            respTrack = 1
            correct_resp+=1
            corrRespPerc= (correct_resp)/(number_trials)
            noRespPerc = (noResp)/(number_trials)
            incorrRespPerc= (incorrect_resp)/(number_trials)
            totalCountList.append(respTrack)
        elif resp==None:
            msg="TOO SLOW"
            corrRespMsg="miss"
            corrRespCode = 0
            respTrack = 2
            noResp+=1
            corrRespPerc= (correct_resp)/(number_trials)
            noRespPerc = (noResp)/(number_trials)
            incorrRespPerc= (incorrect_resp)/(number_trials)
            totalCountList.append(respTrack)
        elif (str(corrAns)==str('left') and resp != str('left')) or (str(corrAns)==str('right') and resp != 'right'):
            msg="INCORRECT"
            corrRespMsg="incorrect"
            corrRespCode = 0
            respTrack = 0
            incorrect_resp+=1
            corrRespPerc= (correct_resp)/(number_trials)
            noRespPerc = (noResp)/(number_trials)
            incorrRespPerc= (incorrect_resp)/(number_trials)
            totalCountList.append(respTrack)


        if number_trials >= 5:
            fiveBackCorrCount = 0
            fiveBacknoRespCount = 0
            fiveBackIncorrCount = 0
            for i in range(-1, -6,-1):
                if totalCountList[i] == 1:
                    fiveBackCorrCount+=1
                elif totalCountList[i] == 2:
                    fiveBacknoRespCount+=1
                elif totalCountList[i] == 0:
                    fiveBackIncorrCount+=1

        #countConsecutive=1
        if number_trials >=2:
            if totalButtonTrack[-1]==totalButtonTrack[-2]:
                countConsecutive+=1
            elif totalButtonTrack[-1]!=totalButtonTrack[-2]:
                countConsecutive=1


        currentLoop.addData('number_trials', number_trials)
        currentLoop.addData('resp', resp)
        currentLoop.addData('msg', msg)
        currentLoop.addData('corrRespMsg', corrRespMsg)
        currentLoop.addData('corrRespCode', corrRespCode)
        currentLoop.addData('respTrack', respTrack)
        currentLoop.addData('correct_resp', correct_resp)
        currentLoop.addData('incorrect_resp', incorrect_resp)
        currentLoop.addData('noResp', noResp)
        currentLoop.addData('corrRespPerc', corrRespPerc)
        currentLoop.addData('incorrRespPerc', incorrRespPerc)
        currentLoop.addData('noRespPerc', noRespPerc)

        currentLoop.addData('totalCountList', totalCountList)
        currentLoop.addData('fiveBackCorrCount', fiveBackCorrCount)
        currentLoop.addData('fiveBacknoRespCount', fiveBacknoRespCount)
        currentLoop.addData('fiveBackIncorrCount', fiveBackIncorrCount)

        currentLoop.addData('totalButtonTrack', totalButtonTrack)
        currentLoop.addData('countConsecutive', countConsecutive)
    CodeComponent raWinExampleCode
      Each Frame:
        if frameN == 0:
            winRecorder.keyframe()
      Begin Routine:
        raText.pos= [0,0]

        raText.text = 'Watch the participant\'s performance and give feedback on the example trials as appropriate. \n\nMake sure the participant understands the task.'
        raText.draw()
        raWinRecorder.keyframe()
        raWin.flip()
  Routine endRun
    CodeComponent endRunCode
      Begin Routine:
        updateRunLog(thisExp.entries)
  Routine trial
    ImageComponent topImage
      stopVal [duration (s)] = 2
      pos = trialTopPos
      startVal [time (s)] = 0.0
      image [set every repeat] = $os.path.join('images', stimTop)
      size = imageSize
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    ImageComponent leftImage
      stopVal [duration (s)] = 2
      pos = trialLeftPos
      startVal [time (s)] = 0.0
      image [set every repeat] = $os.path.join('images', stimLeft)
      size = imageSize
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    ImageComponent rightImage
      stopVal [duration (s)] = 2
      pos = trialRightPos
      startVal [time (s)] = 0.0
      image [set every repeat] = $os.path.join('images', stimRight)
      size = imageSize
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    TextComponent botLeftText
      stopVal [duration (s)] = 2
      pos = [-9,-9]
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    TextComponent botRightText
      stopVal [duration (s)] = 2
      pos = [9,-9]
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    TextComponent pointerText
      stopVal [duration (s)] = 2
      pos = [-9,-10.5]
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    TextComponent middleText
      stopVal [duration (s)] = 2
      pos = [9,-10.5]
      startVal [time (s)] = 0.0
      letterHeight = textLetterSize
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    KeyboardComponent trialResp
      correctAns = $corrAns
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = allowed_keys
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent respLogCode
      Each Frame:
        for prompt in buttonPrompts:
            prompt.draw()
        if frameN == 0:
            trialStartTime = fmriClock.getTime()
      Begin Routine:
        number_trials = ((trials.thisN + 1) + (blocks.thisN*6))
      End Routine:
        trialEndTime = fmriClock.getTime()

        resp=None
        respLast=None

        if trialResp.keys: #coding first response made by participant
            if trialResp.keys[0] in config['keys']['left']:
                resp = 'left'
            elif trialResp.keys[0] in config['keys']['right']:
                resp = 'right'
            elif not trialResp.keys:
                resp = None
                noResp+=1

        if trialResp.keys: #coding last response made by participant
            if trialResp.keys[-1] in config['keys']['left']:
                respLast = 'left'
            elif trialResp.keys[-1] in config['keys']['right']:
                respLast = 'right'

        if resp==str('left'):
            totalButtonTrack.append(1)
        elif resp==str('right'):
            totalButtonTrack.append(2)
        else: #no response
            totalButtonTrack.append(0)


        if (str(corrAns)==str('left') and resp == str('left')) or (str(corrAns)==str('right') and resp == 'right'):
            msg="Correct!"
            corrRespMsg="correct"
            corrRespCode = 1
            respTrack = 1
            correct_resp+=1
            corrRespPerc= (correct_resp)/(number_trials)
            noRespPerc = (noResp)/(number_trials)
            incorrRespPerc= (incorrect_resp)/(number_trials)
            totalCountList.append(respTrack)
        elif resp==None:
            msg="Too slow"
            corrRespMsg="miss"
            corrRespCode = 0
            respTrack = 2
            noResp+=1
            corrRespPerc= (correct_resp)/(number_trials)
            noRespPerc = (noResp)/(number_trials)
            incorrRespPerc= (incorrect_resp)/(number_trials)
            totalCountList.append(respTrack)
        elif (str(corrAns)==str('left') and resp != str('left')) or (str(corrAns)==str('right') and resp != 'right'):
            msg="Incorrect"
            corrRespMsg="incorrect"
            corrRespCode = 0
            respTrack = 0
            incorrect_resp+=1
            corrRespPerc= (correct_resp)/(number_trials)
            noRespPerc = (noResp)/(number_trials)
            incorrRespPerc= (incorrect_resp)/(number_trials)
            totalCountList.append(respTrack)

        if number_trials >= 5:
            fiveBackCorrCount = 0
            fiveBacknoRespCount = 0
            fiveBackIncorrCount = 0
            for i in range(-1, -6,-1):
                if totalCountList[i] == 1:
                    fiveBackCorrCount+=1
                elif totalCountList[i] == 2:
                    fiveBacknoRespCount+=1
                elif totalCountList[i] == 0:
                    fiveBackIncorrCount+=1

        #track # consecutive responses with same button:
        if number_trials >=2:
            if totalButtonTrack[-1]==totalButtonTrack[-2]:
                countConsecutive+=1
            elif totalButtonTrack[-1]!=totalButtonTrack[-2]:
                countConsecutive=1

        if 'oval' in stimTop or 'circle' in stimTop:
            trialCondition = 'shape'
        else:
            trialCondition = 'face'

        currentLoop.addData('trialCondition', trialCondition)
        currentLoop.addData('trialNum', number_trials)
        currentLoop.addData('resp', resp)
        currentLoop.addData('respLast', respLast)
        currentLoop.addData('msg', msg)
        currentLoop.addData('corrRespMsg', corrRespMsg)
        currentLoop.addData('corrRespCode', corrRespCode)
        currentLoop.addData('respTrack', respTrack)
        currentLoop.addData('correct_resp', correct_resp)
        currentLoop.addData('incorrect_resp', incorrect_resp)
        currentLoop.addData('noResp', noResp)
        currentLoop.addData('corrRespPerc', corrRespPerc)
        currentLoop.addData('incorrRespPerc', incorrRespPerc)
        currentLoop.addData('noRespPerc', noRespPerc)

        #currentLoop.addData('totalCountList', totalCountList)
        currentLoop.addData('fiveBackCorrCount', fiveBackCorrCount)
        currentLoop.addData('fiveBacknoRespCount', fiveBacknoRespCount)
        currentLoop.addData('fiveBackIncorrCount', fiveBackIncorrCount)

        #currentLoop.addData('totalButtonTrack', totalButtonTrack)
        currentLoop.addData('countConsecutive', countConsecutive)

        currentLoop.addData('trialStartTime', trialStartTime)
        currentLoop.addData('trialEndTime', trialEndTime)

        events.append(dict(
            run=runNum,
            condition=trialCondition,
            duration=2,
            onset=trialStartTime))
    CodeComponent raWinTrialsCode
      Begin Experiment:
        if mode == 'practice':
            total_trials = 12
        else:
            total_trials = 36
      Each Frame:
        if frameN == 0:
            winRecorder.keyframe()
      Begin Routine:
        trial_pat = 'Trial # %s of %d in this round.\n\nCorrect responses in this run: %04.2f %% \n\nNo responses in this run: %04.2f %% \n\n# correct responses in last five trials: %s \n\n# no response in last five trials: %s \n\n# same consecutive (no) responses: %s'
        trial_args = (number_trials, total_trials, corrRespPerc*100,noRespPerc*100,fiveBackCorrCount,fiveBacknoRespCount,countConsecutive)
        raText.text = trial_pat % trial_args
        raText.draw()
        raWinRecorder.keyframe()
        raWin.flip()
      End Routine:
        raText.text = trial_pat % trial_args
        raText.draw()
        raWin.flip()
    CodeComponent writeRunLogCode
      Begin Experiment:
        import pandas as pd

        # Specify columns explicitly for correct order
        COLUMNS = [
            'trialNum',
            'trialCondition',
            'countdownStartTime', 'countdownLabel',
            'cueStartTime', 'cueEndTime',
            'trialStartTime', 'trialEndTime',
            'fixStartTime', 'fixEndTime',
            'runEndTime',
            'stimLeft', 'stimTop', 'stimRight', 'corrAns',
            'condFile', 'trialResp.keys', 'trialResp.rt',
            'resp', 'msg', 'corrRespMsg', 'corrRespCode',
            'countConsecutive',
        ] + expInfo.keys()

        def updateRunLog(entries):
            df = pd.DataFrame(entries)
            df['run'] = runNum  # 1-based index for "run"

            # Filter rows for this run and selected columns
            run_df = df.filter(COLUMNS)
            if 'runs.thisN' in df.columns:
                run_df = run_df.loc[df['runs.thisN'] == runs.thisN]
            if 'trialNum' in run_df.columns:
                run_df.dropna(axis='index', subset=['trialNum'], inplace=True)
                run_df['trialNum'] = run_df['trialNum'].astype(int)

            runOutfile = '%s_wide.csv' % filename
            run_df.to_csv(runOutfile, encoding='utf-8',
                            header=True, index=False, )
Flow
  Routine intro
  LoopInitiator pracDirections loopType="TrialHandler"
    loopType = sequential
    nReps = mode == 'practice'
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    Routine pracInstr1
    Routine pracInstr2
    Routine pracInstr3
    Routine pracInstr4
    Routine pracInstr5
    LoopInitiator exampleTrials loopType="TrialHandler"
      conditionsFile = conditions/examples.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [{'stimLeft': u'circle.bmp', 'stimTop': u'oval-vertical.bmp', 'corrAns': 2, 'stimRight': u'oval-vertical.bmp'},
        {'stimLeft': u'FA-mock_left.jpg', 'stimTop': u'FA-mock_top.jpg', 'corrAns': 1, 'stimRight': u'FA-mock_right.jpg'},
        {'stimLeft': u'oval-vertical.bmp', 'stimTop': u'oval-horizontal.bmp', 'corrAns': 2, 'stimRight': u'oval-horizontal.bmp'},
        {'stimLeft': u'MF-mock_left.jpg', 'stimTop': u'MF-mock_top.jpg', 'corrAns': 1, 'stimRight': u'MF-mock_right.jpg'}]
      Routine exampleTrial
      Routine fixation
      Routine feedback
    LoopTerminator exampleTrials
    Routine pracInstr6
    Routine pracInstr7
  LoopTerminator pracDirections
  LoopInitiator scanDirections loopType="TrialHandler"
    loopType = sequential
    nReps = mode != 'practice'
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    Routine scanInstr1
  LoopTerminator scanDirections
  LoopInitiator runs loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine waitingScanner
    LoopInitiator countdowns loopType="TrialHandler"
      loopType = sequential
      nReps = 4
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      Routine countdown
    LoopTerminator countdowns
    LoopInitiator blocks loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = nBlocks
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      Routine cue
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = $condFile
        loopType = sequential
        nReps = 1
        Selected rows = $rows
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        Routine trial
        Routine fixation
      LoopTerminator trials
    LoopTerminator blocks
    Routine lastFixation
    Routine endRun
  LoopTerminator runs
  Routine end
