PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = LeoneFaces
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Routines
  Routine Instructions
    TextComponent InstructionsText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Stay awake and still.
        Enjoy the movie!
  Routine WaitForTrigger
    KeyboardComponent TriggerKey
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent WaitText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Waiting for scanner ...
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  Routine PreFixation
    PolygonComponent PreFixationCross
      fillColor = lightgray
      lineWidth = 0
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine PostFixation
    PolygonComponent PostFixationCross
      fillColor = lightgray
      lineWidth = 0
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine PlayMovie
    MovieComponent MovieObject
      backend = moviepy
      forceEndRoutine = True
      movie = LeoneFaces.mp4
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 455
      units = pix
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Flow
  Routine Instructions
  Routine WaitForTrigger
  Routine PreFixation
  Routine PlayMovie
  Routine PostFixation
