PsychoPy2experiment version="2021.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {}
  Full-screen window = True
  Monitor = hPrisma Projector
  Save hdf5 file = True
  Save wide csv file = False
  Screen = 2
  Show info dlg = False
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [2560, 1440]
  color = black
  expName = MovieWithEyetracking
  eyetracker = MouseGaze
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine instr
    TextboxComponent instructions
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        The movie will start in a few moments

        Waiting for scanner ...
    KeyboardComponent key_resp
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine et_instructions
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 0.9
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      text:
        EYE TRACKER SETUP

        Please stare at the moving dots when they appear

        PRESS BUTTON 1 TO CONTINUE
    KeyboardComponent et_continue
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine play_movie
    EyetrackerRecordComponent et_record
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    MovieComponent movie_player
      backend = moviepy
      durationEstim = 900
      forceEndRoutine = True
      movie = $os.path.join('movies', expInfo['movie']+'.mp4')
      size = [36.0, 20.3]
      startVal [time (s)] = 0.0
      units = cm
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    CodeComponent movie_dur
      Code Type = Auto->JS
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      Begin Experiment:
        # Get movie duration from
        t_movie = movie_player.duration
      Begin Routine:
        # Set et_record and movie_player durations
    CodeComponent select_movie
      Code Type = Py
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      Before Experiment:
        expInfo = {
            'participant': 'Unknown',
            'date': data.getDateStr(),
            'movie': ''
        }

        dlg = gui.Dlg(title="Movie with Eyetracking")
        dlg.addField('Subject ID', choices=['Damy001', 'Damy002', 'Damy003'])

        subj_info = dlg.show()

        if dlg.OK:
            print(subj_info)
        else:
            print('User cancelled - exiting')

        # Movie file selector
        mp4_fname = gui.fileOpenDlg(prompt='Select Movie', allowed='*.mp4')

        if mp4_fname:
            print(f'Selected {mp4_fname}')
            expInfo['movie'] = mp4_fname
        else:
            print('User cancelled - exiting')
  Routine post_movie
    TextComponent thanks_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thanks for watching!
      wrapWidth = 0.9
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  Routine sound_check
    MovieComponent movie_check
      backend = moviepy
      durationEstim = 20
      forceEndRoutine = False
      movie = $os.path.join('movies', expInfo['movie']+'_30sec.mp4')
      startVal [time (s)] = 0.0
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    KeyboardComponent adjust
      allowedKeys = '1', '2', '4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent adjvol
      Code Type = Py
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      Begin Routine:
        last_rt = -1.0
      Each Frame:
        if adjust.rt:

            this_rt = adjust.rt

            if this_rt - last_rt > 0.1:

                if adjust.keys == '1':
                    print('LOUDER')

                if adjust.keys == '2':
                    print('QUIETER')

                if adjust.keys == '4':
                    continueRoutine = False

            last_rt = this_rt
  Routine sound_check_instr
    TextComponent sound_check_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 0.9
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      text:
        SOUND LEVEL CHECK

        Press 1 for louder
        Press 2 for quieter
        Press 4 to accept

        PLEASE CLOSE YOUR EYES AND PRESS BUTTON 1
    KeyboardComponent sound_check_inst_text
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trigger_wait
    KeyboardComponent trigger_detect
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent trigger_wait_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Waiting for scanner ...
      wrapWidth = 0.9
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  Routine play_movie_instr
    TextComponent play_movie_instr_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 0.9
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      text:
        The sound check is complete!

        Waiting for operator ...
    KeyboardComponent play_movie_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.25
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = False
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.25
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = False
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = True
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    targetPositions = NINE_POINTS
    units = from exp settings
Flow
  Routine et_instructions
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine sound_check_instr
  Routine trigger_wait
  Routine sound_check
  Routine play_movie_instr
  Routine trigger_wait
  Routine play_movie
  Routine post_movie
