PsychoPy2experiment version="2022.2.5"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = BOLDScreen
  Screen = 0
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [2560, 1440]
  expName = PacedBreathHolding
  keyboardBackend = ioHub
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Routines
  Routine WaitForTrigger
    KeyboardComponent TriggerKey
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TriggerWaitText
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text = Breath normally
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  Routine Instructions
    TextComponent InstructionsText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        BREATHOLDING INSTRUCTIONS

        Follow the size of the green circle with your breathing

        Hold your breath when the circle turns RED

        The circle will fade slowly from RED back to GREEN

        You will be told when you can breath normally again

        This will repeat five times

        PRESS ANY BUTTON TO CONTINUE
    KeyboardComponent InstructionsEndKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PacedBreathing
    PolygonComponent BreathCircle
      colorSpace = hsv
      fillColor = green
      lineWidth = 0
      shape = circle
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 22.5
      units = cm
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    CodeComponent Breathing
      Code Type = Auto->JS
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      Begin Routine:
        # Breathing circle scaling
        breath_amp = 0.25 # Sinusoid scaling amplitude
        breath_off = 0.75 # Sinusoid scaling offset
        breath_t = 6.0 # Resp cycle in seconds
        phi_0 = 0.0 # Initial phase offset
        orig_size = BreathCircle.size
      Each Frame:
        # Update circle radius
        sf = breath_off + (breath_amp * np.sin(2.0 * np.pi * (t / breath_t + phi_0)))
        BreathCircle.size = orig_size * sf
      End Routine:
        BreathCircle.size = orig_size
  Routine GetReady
    TextComponent GetReadyText
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text = Get ready to breath with the circle
      units = norm
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  Routine HoldBreath
    PolygonComponent HoldCircle
      colorSpace = hsv
      fillColor = green
      lineWidth = 0
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      units = cm
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    CodeComponent Holding
      Code Type = Auto->JS
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      Each Frame:
        tt = t/30

        # Hue in range 0 (red) to 120 (green)
        # Stop color slide at 80 (green-yellow)
        h = int(tt * 90.0)

        s = 1 # Fully saturated
        v = 1 # Fully bright
        HoldCircle.color = (h, s, v)
  Routine FreeBreath
    TextComponent FreeBreathText
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 29.5
      text = Breath normally again
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  Routine Thanks305
    TextComponent ThanksText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Breath hold task complete!
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Flow
  Routine Instructions
  Routine WaitForTrigger
  LoopInitiator BreathHoldTrials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine GetReady
    Routine PacedBreathing
    Routine HoldBreath
    Routine FreeBreath
  LoopTerminator BreathHoldTrials
  Routine Thanks305
