PsychoPy2experiment version="2021.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = hPrisma Projector
  Screen = 2
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1280, 960]
  expName = PacedFingerTapping
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Routines
  Routine Instructions
    TextComponent InstructionsText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        This is a finger tapping task using two fingers on either hand.

        You will see two white circles on the left and two on the right.

        When any of the circles turn ORANGE
        get ready to tap the buttons on that hand.

        When the circles flash GREEN
        tap the buttons on that side in time with the flashing.

        Please keep your gaze on the central white cross.

        PRESS ANY BUTTON TO CONTINUE
    KeyboardComponent ContinueKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WaitForTrigger
    KeyboardComponent TriggerKey
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TriggerWaitText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for scanner ...
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  Routine Tapping
    PolygonComponent leftOut
      fillColor [set every repeat] = black
      lineWidth = 2
      pos = (-0.2, 0)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_trial
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    PolygonComponent leftIn
      fillColor = black
      lineWidth = 2
      pos = (-0.1, 0)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_trial
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    PolygonComponent rightIn
      fillColor = black
      lineWidth = 2
      pos = (0.1, 0.0)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_trial
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    PolygonComponent rightOut
      fillColor = black
      lineWidth = 2
      pos = (0.2, 0.0)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_trial
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    CodeComponent ButtonColor
      Code Type = Py
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      Begin Experiment:
        # Trial timings
        t_rest = 15
        t_ready = 2
        t_tapping = 15

        # Start of tapping within trial
        t_tapstart = t_rest + t_ready

        # Total trail duration
        t_trial = t_tapstart + t_tapping

        # Tap interval
        t_tapint = 0.2
      Each Frame:
        if t < t_rest:

            # All buttons black during rest
            leftOut.setFillColor('black')
            leftIn.setFillColor('black')
            rightIn.setFillColor('black')
            rightOut.setFillColor('black')

        elif t < t_rest + t_ready:

            # Set buttons for next hand(s) to orange
            if 'Left' in Hand or 'Both' in Hand:
                leftOut.setFillColor('orange')
                leftIn.setFillColor('orange')

            if 'Right' in Hand or 'Both' in Hand:
                rightIn.setFillColor('orange')
                rightOut.setFillColor('orange')

        else:

            # Alternate colors
            in_color = bool(int((t - t_tapstart) / t_tapint) % 2)

            colors = ['black', 'black', 'black', 'black']

            if 'Right' in Hand or 'Both' in Hand:
                colors[2] = 'green' if in_color else 'black'
                colors[3] = 'black' if in_color else 'green'

            if 'Left' in Hand or 'Both' in Hand:
                colors[1] = 'green' if in_color else 'black'
                colors[0] = 'black' if in_color else 'green'

            # Set button colors
            leftOut.setFillColor(colors[0])
            leftIn.setFillColor(colors[1])
            rightIn.setFillColor(colors[2])
            rightOut.setFillColor(colors[3])
    TextComponent FixationCross
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_trial
      text = +
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    KeyboardComponent ButtonTaps
      allowedKeys = '1', '2', '3', '4', '6', '7', '8', '9'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_trial
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  Routine FinalFixation
    TextComponent FinalFixationCross
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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Flow
  Routine Instructions
  Routine WaitForTrigger
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = handLoop.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'Hand': 'Left'},
      {'Hand': 'Right'},
      {'Hand': 'Both'}]
    Routine Tapping
  LoopTerminator trials
  Routine FinalFixation
