PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = hPrisma Projector
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = RFF_final
  keyboardBackend = ioHub
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Routines
  Routine crosshair
    TextComponent text_crosshair
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine Face_Presentation
    ImageComponent image
      image [set every repeat] = $stimFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 90
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  Routine New_Old_Question
    TextComponent new_old_question
      durationEstim = 2.0
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [condition] = $len(key_resp_2.keys) != 0 or tThisFlipGlobal > new_old_question.tStartRefresh + 2-frameTolerance
      text = Have you seen this person before (during past sessions)?
      wrapWidth = 1.5
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    ImageComponent new_old_prompt
      durationEstim = 2.0
      image = $'icons\\newold buttons even.bmp' if int(expInfo['session']) %2==0 else 'icons\\newold buttons odd.bmp'
      interpolate = nearest
      pos = (0, -0.1)
      size = (1.5, 0.6)
      startVal [time (s)] = 0.0
      stopVal [condition] = $len(key_resp_2.keys) != 0  or tThisFlipGlobal > new_old_prompt.tStartRefresh + 2-frameTolerance
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4','6','7','8','9'
      durationEstim = 2.0
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $len(key_resp_2.keys) != 0 or tThisFlipGlobal > key_resp_2.tStartRefresh + 2-frameTolerance
      store = all keys
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    TextComponent time_holder
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine ITI
    TextComponent ITI_1_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_1
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  Routine ITI_2
    TextComponent ITI_2_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_2
      text = +  
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  Routine Wait_for_Trigger
    TextComponent TriggerText
      letterHeight = 0.04
      startVal [time (s)] = 0
      text = Waiting for trigger...
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    KeyboardComponent TriggerCatcher
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Introduction_Screen_Memory
    TextComponent introduction_memory
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = $'This is the start of  session '+str(expInfo['session'])+' out of a total of 4 face memory task. In this session, 96 pictures of different faces will be presented to you. Some of the pictures have occurred in previous scanning sessions, and some are completely new. \n Please use the numbers on the keyboard to indicate whether a face is OLD (key mappings will be shown on the next screen), and how confident you are of the choice. Please respond as fast as possible, as for each new/old judgement, the maximal response time allowed is 2 seconds.\n Please press key \'1\' to continue when you are ready and understand the instructions'
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    KeyboardComponent start_memory
      allowedKeys = ['1']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Introduction_Screen_Passive
    TextComponent introduction_passive
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is the start of face memory task. In this session, 96 pictures of different faces will be presented to you. Please pay close attention to the faces, and think about what kind of personality that each person in the image might have.

        Once you are ready, please press key '1' (right index finger) to proceed.
    KeyboardComponent start_passive
      allowedKeys = ['1']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End_Screen_Memory
    TextComponent end_memory
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = $'Thank you for completing session ' +str(expInfo['session'])+ ' out of the total of 4 face memory sessions!! \n If you need a break, please press \'1\'. Otherwise, please wait for 10 seconds, and the task will exit on its own. We will move on to the next block.'
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    KeyboardComponent break_needed
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine End_Screen_Passive
    TextComponent end_screen_passive
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Thank you for completing the passive viewing task!!

        Please wait for 10 seconds, and the task will exit on its own.
  Routine button_scheme
    TextComponent text
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text:
        Shown above is the button press scheme to be used for this task. For each image, you will be asked whether it is an OLD image that has appeared during previous sessions.
        Once you are familiarized with the scheme, pleas press key '6' (left index finger) to start the test.
    KeyboardComponent button_confirmation
      allowedKeys = ['6']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent scheme_image
      image = icons/newold buttons odd.bmp
      pos = (0, 0.1)
      size = (1.5, 0.6)
      startVal [time (s)] = 0.0
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  Routine operator_check
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Waiting for the operator...
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_time
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [condition] = $break_catcher.data['break_needed.keys'] !='1'
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      text:
        We will be pausing for a short break before moving on to the next session :)

        Press '1' to exit the program
    KeyboardComponent end_task
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Introduction_Screen_Memory
  Routine button_scheme
  Routine Wait_for_Trigger
  LoopInitiator repeat loopType="TrialHandler"
    conditionsFile = $'stimfiles/stimfiles_final_'+str(expInfo['session'])+'.csv'
    loopType = sequential
    nReps = 1
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    Routine ITI_2
    Routine Face_Presentation
    Routine ITI
    Routine New_Old_Question
  LoopTerminator repeat
  LoopInitiator break_catcher loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine End_Screen_Memory
  LoopTerminator break_catcher
  Routine break_time
