PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = RFF_passive
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Routines
  Routine Introduction_Screen
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        This is the start of face passive viewing task. In this session, 120 pictures of different faces will be presented to you. Some of the pictures have occurred in previous scanning sessions, and some are completely new.

        Please pay close attention to these faces, and think about the potential personality traits that the people in these images might have.

        Please press any key to continue when you are ready and understand the instructions
    KeyboardComponent task_start
      allowedKeys = ['1', '2', '3', '4']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine crosshair
    TextComponent text_crosshair
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine Face_Presentation
    ImageComponent image
      image [set every repeat] = $stimFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine New_Old_Question
    TextComponent text_2
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Have you seen this person before (during past sessions)?
      wrapWidth = 1.5
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    ImageComponent image_2
      image = icons\newold buttons.bmp
      interpolate = nearest
      pos = (0, -0.1)
      size = (1.4, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      store = all keys
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  Routine End_Screen
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing the face memory task!!

        Please press any bottom to exit.
    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine ITI
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_1
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  Routine ITI_2
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_2
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  Routine Wait_for_Trigger
    TextComponent TriggerText
      letterHeight = 0.04
      startVal [time (s)] = 0.5
      text = Waiting for trigger...
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    KeyboardComponent TriggerCatcher
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Wait_for_Trigger
  Routine Introduction_Screen
  LoopInitiator repeat loopType="TrialHandler"
    conditionsFile = $'stimfiles/stimfiles_'+str(expInfo['session'])+'.csv'
    loopType = sequential
    nReps = 1
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    Routine Face_Presentation
    Routine ITI_2
  LoopTerminator repeat
  Routine End_Screen
