PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = RestingStateFixated
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Routines
  Routine Instructions
    TextComponent InstructionsText
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Stay awake and look at the cross
        Try to keep as still as possible
        This scan lasts about eight minutes.

        PRESS ANY KEY TO CONTINUE
    KeyboardComponent ContinueKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
    PolygonComponent FixationCross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 480
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    KeyboardComponent QuitKey
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 480
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  Routine Thanks485
    TextComponent ThanksText
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4.5
      text = The scan is complete!
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Flow
  Routine Instructions
  Routine Fixation
  Routine Thanks485
