PsychoPy2experiment version="2021.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = hPrisma Projector
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = SoundCheck
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Routines
  Routine Instructions
    TextComponent instructions_text
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 36
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      text:
        --- Sound Level Check ---

        Adjust the volume of the soundtrack until
        you can hear it clearly above the scanner noise.

        1 : Quieter   2 : Louder   4 : Exit

        Press 1 to continue
    KeyboardComponent instructions_continue
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WaitForTrigger
    KeyboardComponent trigger_key
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Waiting for scanner ...
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  Routine PlayAndAdjust
    SoundComponent sound_clip
      hamming = False
      sound = budapest_soundcheck_DRC.wav
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      volume [set every frame] = volume.getRating()/100.0
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    SliderComponent volume
      forceEndRoutine = False
      granularity = 0.1
      initVal = 50
      labels = ("0%", "50%", "100%")
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 50, 100)
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    KeyboardComponent adjust
      allowedKeys = '1', '2', '4'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent keypress
      Code Type = Py
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      Begin Routine:
        last_rt = -1.0
      Each Frame:
        if adjust.rt:

            this_rt = adjust.rt

            if this_rt - last_rt > 0.1:

                if adjust.keys == '1':
                    volume.rating = volume.rating - 10
                    if volume.rating < 0:
                        volume.rating = 0
                    volume.draw()

                if adjust.keys == '2':
                    volume.rating = volume.rating + 10
                    if volume.rating > 100:
                        volume.rating = 100
                    volume.draw()

                if adjust.keys == '4':
                    continueRoutine = False

            last_rt = this_rt
Flow
  Routine Instructions
  Routine WaitForTrigger
  Routine PlayAndAdjust
