PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = WaitForTrigger
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Routines
  Routine Fixation
    PolygonComponent Fixation_Cross
      fillColor = lightgray
      interpolate = nearest
      lineColor = 0.0000, 0.0000, 0.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent TriggerDetectedText
      letterHeight = 0.1
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Trigger detected!
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  Routine WaitForTrigger
    KeyboardComponent TriggerDetect
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent WaitText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Waiting for trigger …
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Flow
  Routine WaitForTrigger
  Routine Fixation
